CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>(?P<Row>[A-P])(?P<Column>[0-9]{2}))_s(?P<Site>[0-9]+)_x(?P<X>[0-9]+)_y(?P<Y>[0-9]+)_Fluorescence_(?P<Wavelength>[0-9]+)_nm_Ex\.tiff?$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'Well', 'RNA': 'Well', 'AGP': 'Well', 'Mito': 'Well', 'ER': 'Well'}, {'DNA': 'Site', 'RNA': 'Site', 'AGP': 'Site', 'Mito': 'Site', 'ER': 'Site'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Wavelength "405")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Wavelength "488")
    Name to assign these images:RNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Wavelength "561")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Wavelength "638")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Wavelength "730")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:500
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:RNA
    Name the output image:IllumRNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:500
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:AGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:500
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:Mito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:500
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:ER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:500
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:IllumDNA
    Select method for constructing file names:Single name
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    Enter single file name:IllumDNA
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|IllumCorr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:IllumRNA
    Select method for constructing file names:Single name
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    Enter single file name:IllumRNA
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|IllumCorr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:IllumAGP
    Select method for constructing file names:Single name
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    Enter single file name:IllumAGP
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|IllumCorr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:IllumMito
    Select method for constructing file names:Single name
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    Enter single file name:IllumMito
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|IllumCorr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:IllumER
    Select method for constructing file names:Single name
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    Enter single file name:IllumER
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|IllumCorr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
